PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = True
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:  # 50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns' , corr_resp)
        thisExp.addData('tilt' , direction)
        thisExp.addData('key_resp.corr' , key_resp.corr)
    PolygonComponent Fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      fillColor = white
      size = (50,50)
      units = pix
      shape = cross
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    GratingComponent grating
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      size = 0.3,0.3
      ori [set every repeat] = direction
      tex = sin
      mask = gauss
      phase = 0
      sf = 8
      contrast = 0.5
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'left','right'
      storeCorrect = True
      correctAns = $corr_resp
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  Routine Instruction
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    TextComponent ins
      startVal [time (s)] = 0.0
      text = Instructions- You will be presented with stimuli, if it is tilted towards left, press key 'left'; and if it is tilted towards right, press key 'right'. Press SPACE once you are ready.
      letterHeight = 0.05
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    KeyboardComponent ins_res
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine Thanks
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    TextComponent text
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Thank you for your participation!
      letterHeight = 0.05
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Flow
  Routine Instruction
  LoopInitiator stair loopType="StairHandler"
    nReps = 100
    start value = 10
    max value = 20
    min value = 1
    step sizes = [2,1,1,0.5]
    step type = lin
    N up = 1
    N down = 3
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    Routine trial
  LoopTerminator stair
  Routine Thanks
