PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = True
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      fillColor = white
      size = (50,50)
      units = pix
      shape = cross
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    GratingComponent grating
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      size = 0.2,0.2
      ori [set every repeat] = tilt
      tex = sin
      mask = gauss
      phase = 0
      sf = 5
      saveStartStop = False
      contrast = 0.3
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    KeyboardComponent key_resp
      startVal [time (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'up','down'
      storeCorrect = True
      correctAns = $corrAns
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
              if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
              else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
  Routine Instruction
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    TextComponent text
      startVal [time (s)] = 0.0
      text = Instructions- You will be presented with a stimulus, and if it is tilted, then press key 'down', and if it is vertical (straight), press key 'up'.  When you are ready press SPACE to begin. 
      letterHeight = 0.05
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    KeyboardComponent ins_resp
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine Thanks
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    TextComponent Thank
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
      letterHeight = 0.05
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine Thanks
