PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = False
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      fillColor = white
      size = (10,10)
      units = pix
      shape = circle
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    TextComponent text
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      color [set every repeat] = $colour
      units = pix
      text [set every repeat] = $word
      letterHeight = 0.05
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'r','b'
      storeCorrect = True
      correctAns = $correct_resp
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  Routine instruction
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    TextComponent ins
      startVal [time (s)] = 0.0
      units = pix
      text = Instructions: You will be presented with text. Ignore the meaning of the text and press the key 'r' if the font colour is red and press the key ' b' if the font colour is blue. Press SPACE once you are ready to begin. 
      letterHeight = 1
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    KeyboardComponent key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine thank
    RoutineSettingsComponent thank
      desc = Thank you
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    TextComponent thankyou
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Thank you for participating in this experiment!
      letterHeight = 0.05
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = /Users/ishapatel/Desktop/PSY310_Lab/psychopy1StroopTaskCond.xlsx
    nReps = 10
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine thank
